---
API: 2.1
OpenSesame: 3.3.10a12
Platform: nt
---
set width 1024
set uniform_coordinates yes
set title "Replication: Kerwer et al.(2021)"
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend legacy
set round_decimals 2
set mouse_backend legacy
set keyboard_backend legacy
set height 768
set fullscreen no
set form_clicks no
set foreground white
set font_underline no
set font_size 18
set font_italic no
set font_family "chinese-japanese-korean"
set font_bold no
set experiment_path "D:\\R project\\Projects\\Projects\\202102_PL\\1_OS_scripts"
set disable_garbage_collection yes
set description "The main experiment item"
set coordinates uniform
set compensation 0
set color_backend legacy
set clock_backend legacy
set canvas_backend legacy
set background black

define loop ACC
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 Q_type Access
	setcycle 0 Q_probe "你想要取得原始論文全文嗎？"
	run ACC_sequence

define sketchpad ACC_board
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=18 html=yes show_if=always text="[Q_probe]" x=0 y=-96 z_index=0
	draw textline center=1 color=white font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=18 html=yes show_if=always text="Y:想要" x=-160 y=128 z_index=0
	draw textline center=1 color=white font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=18 html=yes show_if=always text="N:不想要" x=128 y=128 z_index=0

define keyboard_response ACC_response
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses "y;n"

define sequence ACC_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run ACC_board always
	run ACC_response always
	run Study_logger always

define form_text_display Access_show
	set timeout infinite
	set spacing 10
	set rows "1;4;1"
	set only_render yes
	set ok_text "記下網址請點此繼續"
	set margins "50;50;50;50"
	set form_title "全文取得網址"
	set form_text "[Link]"
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme gray
	widget 0 0 3 1 label text="[form_title]"
	widget 0 1 3 1 label center=no text="[form_text]"
	widget 1 2 1 1 button text="[ok_text]"


define form_multiple_choice Access_survey
	set timeout infinite
	set spacing 10
	set question "你想要取得原始論文全文嗎？"
	__options__
	想
	不想
	__end__
	set margins "50;50;50;50"
	set form_var response
	set form_title "文章適讀性評估"
	set description "A simple multiple choice item"
	set button_text Ok
	set allow_multiple no
	set advance_immediately yes
	set _theme gray

define form_multiple_choice Comprehensibility_survey
	set timeout infinite
	set spacing 10
	__question__
	您如何評價此摘要？<br>
	請選擇以下等級說明您對摘要的評估。
	__end__
	__options__
	1: 完全無法理解內容
	2
	3
	4
	5
	6
	7 
	8: 完全能理解內容
	__end__
	set margins "50;50;50;50"
	set form_var response
	set form_title "文章適讀性評估"
	set description "A simple multiple choice item"
	set button_text Ok
	set allow_multiple no
	set advance_immediately yes
	set _theme gray

define form_multiple_choice Credibility_survey
	set timeout infinite
	set spacing 10
	__question__
	您如何評價此摘要？<br>
	請選擇以下等級說明您對摘要的評估。
	__end__
	__options__
	1: 摘要完全不可信
	2
	3
	4
	5
	6
	7 
	8: 摘要完全可信
	__end__
	set margins "50;50;50;50"
	set form_var response
	set form_title "文章適讀性評估"
	set description "A simple multiple choice item"
	set button_text Ok
	set allow_multiple no
	set advance_immediately yes
	set _theme gray

define form_multiple_choice Decision_survey
	set timeout infinite
	set spacing 10
	__question__
	您如何評價此摘要？<br> 
	請選擇以下等級說明您對摘要的評估。
	__end__
	__options__
	1: 完全無法做決定
	2
	3
	4
	5
	6
	7 
	8: 完全能自己做決定
	__end__
	set margins "50;50;50;50"
	set form_var response
	set form_title "文章適讀性評估"
	set description "A simple multiple choice item"
	set button_text Ok
	set allow_multiple no
	set advance_immediately yes
	set _theme gray

define loop EES
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 4
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 Q_type Curious
	setcycle 0 Q_probe "請同時說明您在閱讀摘要時所經歷的感受。請為每一種情感指出您經歷的強烈程度。"
	setcycle 0 Q_options "1:  非常不好奇<br/> 2 <br/> 3 <br/> 4 <br/> 5 <br/> 6 <br/> 7 <br/> 8: 非常好奇"
	setcycle 1 Q_type Bored
	setcycle 1 Q_probe "請同時說明您在閱讀摘要時所經歷的感受。請為每一種情感指出您經歷的強烈程度。"
	setcycle 1 Q_options "1:  非常無聊<br/> 2 <br/> 3 <br/> 4 <br/> 5 <br/> 6 <br/> 7 <br/> 8: 非常有趣"
	setcycle 2 Q_type Confused
	setcycle 2 Q_probe "請同時說明您在閱讀摘要時所經歷的感受。請為每一種情感指出您經歷的強烈程度。"
	setcycle 2 Q_options "1:  非常困惑<br/> 2 <br/> 3 <br/> 4 <br/> 5 <br/> 6 <br/> 7 <br/> 8: 非常了解"
	setcycle 3 Q_type Frustrated
	setcycle 3 Q_probe "請同時說明您在閱讀摘要時所經歷的感受。請為每一種情感指出您經歷的強烈程度。"
	setcycle 3 Q_options "1:  非常沮喪<br/> 2 <br/> 3 <br/> 4 <br/> 5 <br/> 6 <br/> 7 <br/> 8: 非常開心"
	run EES_sequence

define sketchpad EES_board
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=24 html=yes show_if=always text="[Q_probe]" x=0 y=-96 z_index=0
	draw textline center=1 color=black font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=16 html=yes show_if=always text="[Q_options]" x=0 y=64 z_index=0

define keyboard_response EES_response
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses "1;2;3;4;5;6;7;8"

define sequence EES_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run EES_board always
	run EES_response always
	run Study_logger always

define form_text_display End_of_Study_display
	set timeout infinite
	set spacing 10
	set rows "1;4;1"
	set only_render no
	set ok_text "點我結束"
	set margins "50;50;50;50"
	set form_title "測驗結束"
	set form_text "感謝您的參與"
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme gray
	widget 0 0 3 1 label text="[form_title]"
	widget 0 1 3 1 label center=no text="[form_text]"
	widget 1 2 1 1 button text="[ok_text]"


define loop JB
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 9
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 Question "<h3>心理學知識由研究人員的個人觀點所組成，因為心理學中沒有事實。</h3>"
	setcycle 0 Options "1：完全不正確；2：大部份不正確；3：不太可能正確4：有點正確；5：大不份正確；6：完全正確"
	setcycle 0 Q_type Belief
	setcycle 0 Topic PJ
	setcycle 0 JB_id 1
	setcycle 0 Title "在接下來的敘述中，你會看到關於心理學作為一門科學的陳述。請說明您同意這些陳述的程度，從“完全不正確”到“完全正確”。請記住，所有陳述皆將心理學稱為一門科學。"
	setcycle 1 Question "<h3>在心理學中，科學家只是將自己的觀點視作科學知識。</h3>"
	setcycle 1 Options "1：完全不正確；2：大部份不正確；3：不太可能正確4：有點正確；5：大不份正確；6：完全正確"
	setcycle 1 Q_type Belief
	setcycle 1 Topic PJ
	setcycle 1 JB_id 2
	setcycle 1 Title "在接下來的敘述中，你會看到關於心理學作為一門科學的陳述。請說明您同意這些陳述的程度，從“完全不正確”到“完全正確”。請記住，所有陳述皆將心理學稱為一門科學。"
	setcycle 2 Question "<h3>在心理學中，科學知識的產生主要來自各自研究人員的觀點。</h3>"
	setcycle 2 Options "1：完全不正確；2：大部份不正確；3：不太可能正確4：有點正確；5：大不份正確；6：完全正確"
	setcycle 2 Q_type Belief
	setcycle 2 Topic PJ
	setcycle 2 JB_id 3
	setcycle 2 Title "在接下來的敘述中，你會看到關於心理學作為一門科學的陳述。請說明您同意這些陳述的程度，從“完全不正確”到“完全正確”。請記住，所有陳述皆將心理學稱為一門科學。"
	setcycle 3 Question "<h3>如果心理學家說某些心理學上的事情是正確的話，那麼我會相信它。</h3>"
	setcycle 3 Options "1：完全不正確；2：大部份不正確；3：不太可能正確4：有點正確；5：大不份正確；6：完全正確"
	setcycle 3 Q_type Belief
	setcycle 3 Topic JA
	setcycle 3 JB_id 1
	setcycle 3 Title "在接下來的敘述中，你會看到關於心理學作為一門科學的陳述。請說明您同意這些陳述的程度，從“完全不正確”到“完全正確”。請記住，所有陳述皆將心理學稱為一門科學。"
	setcycle 4 Question "<h3>如果心理學家告訴我有關心理學的一些事情，那麼會相信它。</h3>"
	setcycle 4 Options "1：完全不正確；2：大部份不正確；3：不太可能正確4：有點正確；5：大不份正確；6：完全正確"
	setcycle 4 Q_type Belief
	setcycle 4 Topic JA
	setcycle 4 JB_id 2
	setcycle 4 Title "在接下來的敘述中，你會看到關於心理學作為一門科學的陳述。請說明您同意這些陳述的程度，從“完全不正確”到“完全正確”。請記住，所有陳述皆將心理學稱為一門科學。"
	setcycle 5 Question "<h3>當我閱讀於心理學研究的東西時，我會知道這是真的。</h3>"
	setcycle 5 Options "1：完全不正確；2：大部份不正確；3：不太可能正確4：有點正確；5：大不份正確；6：完全正確"
	setcycle 5 Q_type Belief
	setcycle 5 Topic JA
	setcycle 5 JB_id 3
	setcycle 5 Title "在接下來的敘述中，你會看到關於心理學作為一門科學的陳述。請說明您同意這些陳述的程度，從“完全不正確”到“完全正確”。請記住，所有陳述皆將心理學稱為一門科學。"
	setcycle 6 Question "<h3>為了能夠相信心理學上的科學主張，必須檢查各種來源。</h3>"
	setcycle 6 Options "1：完全不正確；2：大部份不正確；3：不太可能正確4：有點正確；5：大不份正確；6：完全正確"
	setcycle 6 Q_type Belief
	setcycle 6 Topic MS
	setcycle 6 JB_id 1
	setcycle 6 Title "在接下來的敘述中，你會看到關於心理學作為一門科學的陳述。請說明您同意這些陳述的程度，從“完全不正確”到“完全正確”。請記住，所有陳述皆將心理學稱為一門科學。"
	setcycle 7 Question "<h3>在我檢查了至少一個其他資料之前，我永遠無法確定心理學上的科學主張。</h3>"
	setcycle 7 Options "1：完全不正確；2：大部份不正確；3：不太可能正確4：有點正確；5：大不份正確；6：完全正確"
	setcycle 7 Q_type Belief
	setcycle 7 Topic MS
	setcycle 7 JB_id 2
	setcycle 7 Title "在接下來的敘述中，你會看到關於心理學作為一門科學的陳述。請說明您同意這些陳述的程度，從“完全不正確”到“完全正確”。請記住，所有陳述皆將心理學稱為一門科學。"
	setcycle 8 Question "<h3>在心理學上，僅憑一個來源不足以決定在科學上是正確的。</h3>"
	setcycle 8 Options "1：完全不正確；2：大部份不正確；3：不太可能正確4：有點正確；5：大不份正確；6：完全正確"
	setcycle 8 Q_type Belief
	setcycle 8 Topic MS
	setcycle 8 JB_id 3
	setcycle 8 Title "在接下來的敘述中，你會看到關於心理學作為一門科學的陳述。請說明您同意這些陳述的程度，從“完全不正確”到“完全正確”。請記住，所有陳述皆將心理學稱為一門科學。"
	run JB_seq

define sketchpad JB_board
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=18 html=yes show_if=always text="[Question]" x=0 y=-96 z_index=0
	draw textline center=1 color=black font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=18 html=yes show_if=always text="[Options]" x=0 y=32 z_index=0
	draw textline center=1 color=black font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=18 html=yes show_if=always text="" x=-672 y=-256 z_index=0

define keyboard_response JB_response
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses "1;2;3;4;5;6"

define sequence JB_seq
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run JB_survey always
	run JB_board never
	run JB_response never
	run Study_logger always

define form_multiple_choice JB_survey
	set timeout infinite
	set spacing 10
	__question__
	[Question]
	__end__
	__options__
	1：完全不正確
	2：大部份不正確
	3：不太可能正確
	4：有點正確
	5：大不份正確
	6：完全正確
	__end__
	set margins "50;50;50;50"
	set form_var response
	set form_title "[Title]"
	set description "A simple multiple choice item"
	set button_text Ok
	set allow_multiple no
	set advance_immediately yes
	set _theme gray

define sketchpad Q_board
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=24 html=yes show_if=always text="[Q_probe]" x=0 y=-96 z_index=0
	draw textline center=1 color=white font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=16 html=yes show_if=always text="[Q_options]" x=0 y=64 z_index=0

define keyboard_response Q_response
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses "1;2;3;4;5;6;7;8"

define sequence Q_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Q_board never
	run Q_response never
	run Study_logger always

define loop Questions
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 5
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 Q_type Comprehensibility
	setcycle 0 Q_probe "How do you rate this summary? <br/>Please indicate your assessment of the summary on the following scale."
	setcycle 0 Q_options "1:  完全無法理解內容 <br/>2 <br/> 3 <br/> 4 <br/> 5 <br/> 6 <br/> 7 <br/> 8: 完全能理解內容"
	setcycle 1 Q_type Scientificness
	setcycle 1 Q_probe "How do you rate this summary? <br/>Please indicate your assessment of the summary on the following scale."
	setcycle 1 Q_options "1:  完全沒有科學價值內容<br/> 2 <br/> 3 <br/> 4 <br/> 5 <br/> 6 <br/> 7 <br/> 8: 完全有科學價值內容"
	setcycle 2 Q_type Credibility
	setcycle 2 Q_probe "How do you rate this summary? <br/>Please indicate your assessment of the summary on the following scale."
	setcycle 2 Q_options "1:  摘要完全沒有信用<br/> 2 <br/> 3 <br/> 4 <br/> 5 <br/> 6 <br/> 7 <br/> 8: 摘要完全有信用"
	setcycle 3 Q_type Veracity
	setcycle 3 Q_probe "Based on this summary, I am able to evaluate the veracity of the corresponding study. Please indicate your agreement with the following statements."
	setcycle 3 Q_options "1:  完全沒有真實性<br/> 2 <br/> 3 <br/> 4 <br/> 5 <br/> 6 <br/> 7 <br/> 8: 完全有真實性"
	setcycle 4 Q_type Decision
	setcycle 4 Q_probe "Based on this summary, I am able to make a decision without needing any further information (i.e., reading the full text or talking to an expert). Please indicate your agreement with the following statements."
	setcycle 4 Q_options "1:  完全無法做決定<br/> 2 <br/> 3 <br/> 4 <br/> 5 <br/> 6 <br/> 7 <br/> 8: 完全能自己做決定"
	run Q_sequence

define form_multiple_choice Scientificness_survey
	set timeout infinite
	set spacing 10
	__question__
	您如何評價此摘要？ <br>
	請選擇以下等級說明您對摘要的評估。
	__end__
	__options__
	1: 完全沒有科學價值內容
	2
	3
	4
	5
	6
	7 
	8: 完全有科學價值內容
	__end__
	set margins "50;50;50;50"
	set form_var response
	set form_title "文章適讀性評估"
	set description "A simple multiple choice item"
	set button_text Ok
	set allow_multiple no
	set advance_immediately yes
	set _theme gray

define logger Study_logger
	set description "Logs experimental data"
	set auto_log no
	log response
	log Q_type
	log accept_status
	log checkbox_status
	log Content
	log OSA
	log NH
	log Text_test_Q
	log correct_response

define sketchpad Test_board
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=18 html=yes show_if=always text="[Text_test_Q]" x=0 y=-96 z_index=0
	draw textline center=1 color=white font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=18 html=yes show_if=always text="Y:是" x=-160 y=128 z_index=0
	draw textline center=1 color=white font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=18 html=yes show_if=always text="N:否" x=128 y=128 z_index=0

define keyboard_response Test_response
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses "y;n"

define form_multiple_choice Test_survey
	set timeout infinite
	set spacing 10
	set question "[Text_test_Q]"
	__options__
	是
	否
	__end__
	set margins "50;50;50;50"
	set form_var response
	set form_title "請根據您剛才讀過的三篇文章回答以下問題"
	set description "A simple multiple choice item"
	set button_text Ok
	set allow_multiple yes
	set advance_immediately yes
	set _theme gray

define form_multiple_choice Veracity_survey
	set timeout infinite
	set spacing 10
	__question__
	您如何評價此摘要？<br> 
	請選擇以下等級說明您對摘要的評估。
	__end__
	__options__
	1: 完全沒有真實性
	2
	3
	4
	5
	6
	7 
	8: 完全有真實性
	__end__
	set margins "50;50;50;50"
	set form_var response
	set form_title "文章適讀性評估"
	set description "A simple multiple choice item"
	set button_text Ok
	set allow_multiple no
	set advance_immediately yes
	set _theme gray

define inline_html birth_year
	__html__
	請輸入出生西元年份的最後兩個數字：<br/>
	例如， 出生年是2001，請輸入<b>01</b><br/>
	<br/>
	填寫完畢點擊OK繼續
	<br/>
	<input type='text' name='text_response'>
	<input type='submit' value='ok'>
	__end__
	set description "Embeds custom HTML"

define loop block
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 24
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 Text_test_Q Text01_Q1
	setcycle 0 correct_response y
	setcycle 0 Test_id 1
	setcycle 0 Q_type Knowledge
	setcycle 1 Text_test_Q Text01_Q2
	setcycle 1 correct_response y
	setcycle 1 Test_id 1
	setcycle 1 Q_type Knowledge
	setcycle 2 Text_test_Q Text02_Q1
	setcycle 2 correct_response n
	setcycle 2 Test_id 2
	setcycle 2 Q_type Knowledge
	setcycle 3 Text_test_Q Text02_Q2
	setcycle 3 correct_response y
	setcycle 3 Test_id 2
	setcycle 3 Q_type Knowledge
	setcycle 4 Text_test_Q Text03_Q1
	setcycle 4 correct_response n
	setcycle 4 Test_id 3
	setcycle 4 Q_type Knowledge
	setcycle 5 Text_test_Q Text03_Q2
	setcycle 5 correct_response y
	setcycle 5 Test_id 3
	setcycle 5 Q_type Knowledge
	setcycle 6 Text_test_Q Text04_Q1
	setcycle 6 correct_response y
	setcycle 6 Test_id 4
	setcycle 6 Q_type Knowledge
	setcycle 7 Text_test_Q Text04_Q2
	setcycle 7 correct_response y
	setcycle 7 Test_id 4
	setcycle 7 Q_type Knowledge
	setcycle 8 Text_test_Q Text05_Q1
	setcycle 8 correct_response n
	setcycle 8 Test_id 5
	setcycle 8 Q_type Knowledge
	setcycle 9 Text_test_Q Text05_Q2
	setcycle 9 correct_response y
	setcycle 9 Test_id 5
	setcycle 9 Q_type Knowledge
	setcycle 10 Text_test_Q Text06_Q1
	setcycle 10 correct_response n
	setcycle 10 Test_id 6
	setcycle 10 Q_type Knowledge
	setcycle 11 Text_test_Q Text06_Q2
	setcycle 11 correct_response y
	setcycle 11 Test_id 6
	setcycle 11 Q_type Knowledge
	setcycle 12 Text_test_Q Text07_Q1
	setcycle 12 correct_response y
	setcycle 12 Test_id 7
	setcycle 12 Q_type Knowledge
	setcycle 13 Text_test_Q Text07_Q2
	setcycle 13 correct_response y
	setcycle 13 Test_id 7
	setcycle 13 Q_type Knowledge
	setcycle 14 Text_test_Q Text08_Q1
	setcycle 14 correct_response n
	setcycle 14 Test_id 8
	setcycle 14 Q_type Knowledge
	setcycle 15 Text_test_Q Text08_Q2
	setcycle 15 correct_response y
	setcycle 15 Test_id 8
	setcycle 15 Q_type Knowledge
	setcycle 16 Text_test_Q Text09_Q1
	setcycle 16 correct_response n
	setcycle 16 Test_id 9
	setcycle 16 Q_type Knowledge
	setcycle 17 Text_test_Q Text09_Q2
	setcycle 17 correct_response y
	setcycle 17 Test_id 9
	setcycle 17 Q_type Knowledge
	setcycle 18 Text_test_Q Text10_Q1
	setcycle 18 correct_response y
	setcycle 18 Test_id 10
	setcycle 18 Q_type Knowledge
	setcycle 19 Text_test_Q Text10_Q2
	setcycle 19 correct_response y
	setcycle 19 Test_id 10
	setcycle 19 Q_type Knowledge
	setcycle 20 Text_test_Q Text11_Q1
	setcycle 20 correct_response n
	setcycle 20 Test_id 11
	setcycle 20 Q_type Knowledge
	setcycle 21 Text_test_Q Text11_Q2
	setcycle 21 correct_response y
	setcycle 21 Test_id 11
	setcycle 21 Q_type Knowledge
	setcycle 22 Text_test_Q Text12_Q1
	setcycle 22 correct_response n
	setcycle 22 Test_id 12
	setcycle 22 Q_type Knowledge
	setcycle 23 Text_test_Q Text12_Q2
	setcycle 23 correct_response y
	setcycle 23 Test_id 12
	setcycle 23 Q_type Knowledge
	run block_test

define sequence block_test
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Test_survey "([Test_id]=[Qid01]) or ([Test_id]=[Qid02]) or ([Test_id]=[Qid03])"
	run Test_board never
	run Test_response never
	run Study_logger always

define loop covariates
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 2
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 Question "您的日常生活涉入科學研究的程度？ 請選擇以下最適合個人狀況的等級。"
	setcycle 0 Options "1: 只有一點點 <br/> 2 <br/> 3 <br/> 4 <br/> 5 <br/> 6 <br/> 7 <br/> 8: 非常高/非常好"
	setcycle 0 Q_type self_eval
	setcycle 0 Topic familiarity
	setcycle 1 Question "您如何評估自己判斷科學研究真實性的能力？ 請選擇以下最適合個人狀況的等級。"
	setcycle 1 Options "1: 只有一點點 <br/> 2 <br/> 3 <br/> 4 <br/> 5 <br/> 6 <br/> 7 <br/> 8: 非常高/非常好"
	setcycle 1 Q_type self_eval
	setcycle 1 Topic ability
	run covariates_seq

define sketchpad covariates_board
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=18 html=yes show_if=always text="[Question]" x=0 y=-96 z_index=0
	draw textline center=1 color=black font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=18 html=yes show_if=always text="[Options]" x=0 y=32 z_index=0
	draw textline center=1 color=black font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=18 html=yes show_if=always text="" x=-672 y=-256 z_index=0

define keyboard_response covariates_response
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses "1;2;3;4;5;6;7;8"

define sequence covariates_seq
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run covariates_survey always
	run covariates_board never
	run covariates_response never
	run Study_logger always

define form_multiple_choice covariates_survey
	set timeout infinite
	set spacing 10
	set question "[Question]"
	__options__
	1:只有一點點
	2
	3
	4
	5
	6
	7
	8:非常高/非常好
	__end__
	set margins "50;50;50;50"
	set form_var response
	set form_title "先備知識調查"
	set description "A simple multiple choice item"
	set button_text "選好即刻進入下一題"
	set allow_multiple no
	set advance_immediately yes
	set _theme plain

define sequence experiment
	set flush_keyboard yes
	set description "主程序"
	run form_consent always
	run welcome always
	run main always

define form_consent form_consent
	set timeout infinite
	set spacing 10
	set rows "1;4;1;1"
	set only_render no
	set margins "50;50;50;50"
	set form_title "知情同意說明"
	__form_text__
	您即將參與一項實驗。<br>
	該實驗不會對您的健康構成任何風險，您的姓名也不會被研究結果所記錄。<br>
	在您完成參與本研究後，您將獲得對本研究問題的簡要說明。<br>
	如果您有任何本同意書未解決的問題，請隨時提出。<br>
	如果您感覺不舒服，您可以在實驗過程中隨時停止。<br>
	__end__
	set description "A simple consent form"
	set decline_text "不想參加"
	set decline_message "請先確認您已經閱讀完畢"
	set cols "2;2"
	set checkbox_text "我已經完全理解以上說明"
	set accept_text "確定參加！"
	set _theme gray
	widget 0 0 2 1 label text="[form_title]"
	widget 0 1 2 1 label center=no text="[form_text]"
	widget 0 2 2 1 checkbox text="[checkbox_text]" var=checkbox_status
	widget 0 3 1 1 button text="[accept_text]" var=accept_status
	widget 1 3 1 1 button text="[decline_text]"


define form_multiple_choice gender
	set timeout infinite
	set spacing 10
	set question "請問您的性別？"
	__options__
	女性
	男性
	跨性別
	非二元性別
	不想回答
	__end__
	set margins "50;50;50;50"
	set form_var response
	set form_title "基本資訊調查"
	set description "A simple multiple choice item"
	set button_text "確定回答"
	set allow_multiple no
	set advance_immediately no
	set _theme gray

define inline_javascript id_recording
	set description "Executes JavaScript code (ECMA 5.1)"
	___run__
	// Save the original text id to access the Questions in an end of block
	if((vars.count_text_seq%3)===0) {
	  vars.Qid01 = vars.O_id
	} else if((vars.count_text_seq%3)===1) {
	  vars.Qid02 = vars.O_id
	} else {
	  vars.Qid03 = vars.O_id
	}
	__end__
	set _prepare ""

define sequence main
	set flush_keyboard yes
	set description "分支程序"
	run gender always
	run birth_year always
	run JB always
	run covariates always
	run shuffle_block always
	run text_CB1 "[CB]=1"
	run text_CB2 "[CB]=2"
	run text_CB3 "[CB]=3"
	run End_of_Study_display always

define inline_javascript shuffle_block
	set description "Executes JavaScript code (ECMA 5.1)"
	___run__
	// getRndInteger(min, max) returns a random number between min and max (both included):
	function getRndInteger(min, max) {
	  return Math.floor(Math.random() * (max - min + 1) ) + min;
	}
	
	vars.CB = getRndInteger(1,3);
	__end__
	set _prepare ""

define loop text_CB1
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 36
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 Content "01_PLS.txt"
	setcycle 0 NH Y
	setcycle 0 OSA N
	setcycle 0 Text_id 1
	setcycle 0 BLOCK 1
	setcycle 0 O_id 1
	setcycle 0 Link "https://www.doi.org/"
	setcycle 1 Content "01_PLS.txt"
	setcycle 1 NH N
	setcycle 1 OSA N
	setcycle 1 Text_id 1
	setcycle 1 BLOCK 2
	setcycle 1 O_id 1
	setcycle 1 Link "https://www.doi.org/"
	setcycle 2 Content "過去雖有實徵研究認定努力與學業成就在儒家社會中具道德性，但其立論皆以參與者對學業活動的意見而間接推論，並未直接檢驗參與者對努力及學業成就之道德判定。一方面儒家文化以角色義務為基礎的道德觀可能將「努力」與「學業成就」視為學子應盡的道德義務；另一方面，社會—認知範疇理論則視盡義務與否僅代表社會成規議題而非道德議題。據此，本研究將探討台灣青少年對努力與學業成就的看法較符合由儒家學說衍生之道德義務假設、或較符合社會—認知範疇理論之推論。鑒於儒家文化視某些角色義務具有不分情況皆須積極奉行之無條件積極性，本研究亦探究青少年對努力及學業成就之無條件積極性的社會成規判定與道德判定，並對照學子對典型之無條件積極義務「孝道」之看法。共148位大學生與158位高中生填寫有關「努力」、「學業成就」、「孝道」是否具社會成規或道德屬性之問卷。以t檢定發現，「努力」具道德屬性的論述未被青少年認可；「努力」雖被視為具社會成規屬性但不具無條件積極性，且其強度仍不及「孝道」；「學業成就」則未被認可屬於道德或社會成規。換言之，努力具道德性並非台灣青少年之共識。"
	setcycle 2 NH ""
	setcycle 2 OSA Y
	setcycle 2 Text_id 1
	setcycle 2 BLOCK 3
	setcycle 2 O_id 1
	setcycle 2 Link "https://www.doi.org/"
	setcycle 3 Content "02_PLS.txt"
	setcycle 3 NH Y
	setcycle 3 OSA N
	setcycle 3 Text_id 2
	setcycle 3 BLOCK 1
	setcycle 3 O_id 2
	setcycle 3 Link "https://www.doi.org/"
	setcycle 4 Content "02_PLS.txt"
	setcycle 4 NH N
	setcycle 4 OSA N
	setcycle 4 Text_id 2
	setcycle 4 BLOCK 3
	setcycle 4 O_id 2
	setcycle 4 Link "https://www.doi.org/"
	setcycle 5 Content "廣義的他種族效應係指人們對本種族與他種族臉孔的處理方式有別，包括辨認本種族臉孔的優勢以及對混合種族臉孔的歸類偏誤。先前的種族臉孔歸類研究多以西方白種人社會為模型，本研究欲延伸至單一種族的台灣社會，我們採用變形臉孔典範探討台灣成人與學齡期兒童對種族混合臉孔的分類表現。實驗一為成人（N = 33）的種族分類作業，測試成人對不同比例亞洲人／白人混合臉孔的種族分類傾向；實驗二為學齡期兒童，測試7 ～ 8歲（N =21）、9 ～ 10歲（N = 22）與11 ～ 12歲（N = 22）兒童的種族分類傾向。結果發現，隨變形臉孔中的亞洲人成分增加，參與者將該臉孔分類為亞洲人的比率隨之提高；而針對亞洲人成分50%的臉孔，7 ～ 8歲組傾向將其歸類為亞洲人，而9 ～ 10歲組、11 ～ 12歲組及成人則都傾向將之歸類為白人。反應時間分析顯示愈靠近兩個端點的反應時間愈短（表示兩端的臉孔容易歸類），愈靠近中間的臉孔反應時間愈長（較困難）。最後，曲線擬合結果顯示，成人將目標臉孔分類為亞洲人的機率達一半（閾值），所需的亞洲人成分為56.01%；7 ～ 8歲組的閾值為49.52%，表現出中立的歸類傾向；而9 ～ 10歲及11 ～ 12歲組的閾值分別為54.27%、53.13%，有隨年齡略增加的趨勢。整體而言，本研究提供種族臉孔歸類偏誤在兒童期發展的跨文化證據。"
	setcycle 5 NH ""
	setcycle 5 OSA Y
	setcycle 5 Text_id 2
	setcycle 5 BLOCK 2
	setcycle 5 O_id 2
	setcycle 5 Link "https://www.doi.org/"
	setcycle 6 Content "03_PLS.txt"
	setcycle 6 NH Y
	setcycle 6 OSA N
	setcycle 6 Text_id 3
	setcycle 6 BLOCK 2
	setcycle 6 O_id 3
	setcycle 6 Link "https://www.doi.org/"
	setcycle 7 Content "03_PLS.txt"
	setcycle 7 NH N
	setcycle 7 OSA N
	setcycle 7 Text_id 3
	setcycle 7 BLOCK 1
	setcycle 7 O_id 3
	setcycle 7 Link "https://www.doi.org/"
	setcycle 8 Content "注意力不足過動症（ADHD）兒童的核心症狀雖然是注意力不足、過動／衝動，但情緒調控問題近來亦受到關切。本研究的目的為從家庭情緒脈絡觀點，探討「父母情緒表達」、「父母情緒教養」、及「家庭的情緒氣氛」對ADHD兒童情緒調控的預測，並比較ADHD兒童及控制組兒童在情緒調控能力及家庭情緒脈絡之差異。研究對象為60位ADHD學齡兒童及60位控制組兒童及其父母。研究方式包括由父母及兒童問卷評量，並透過模擬情境法測量兒童觀看父母衝突影片後的情緒反應及情緒調控能力。結果發現，ADHD兒童自覺害怕與難過強度較弱、平復害怕所需的時間較短、對害怕與生氣情緒的平復程度較容易；但父母評量結果則呈現ADHD兒童日常生活中害怕、難過、生氣之情緒較強烈，且情緒調控能力較弱。兩組兒童之家庭情緒脈絡顯示，ADHD兒童之父母負向情緒表達較多；較多摒除型及失控型情緒理念；較多父母衝突，父子依戀及母子依戀程度較弱。但其中對ADHD兒童情緒反應及情緒調控能力最具預測力的是父母的後設情緒理念，尤其當控制了兒童的症狀之後，父母情緒理念可以預測ADHD兒童的情緒反應及情緒調控能力。本研究顯示父母後設情緒理念對ADHD兒童情緒反應及情緒調控之重要性，此結果可提供臨床工作者訓練ADHD兒童調控情緒之參考。"
	setcycle 8 NH ""
	setcycle 8 OSA Y
	setcycle 8 Text_id 3
	setcycle 8 BLOCK 3
	setcycle 8 O_id 3
	setcycle 8 Link "https://www.doi.org/"
	setcycle 9 Content "04_PLS.txt"
	setcycle 9 NH Y
	setcycle 9 OSA N
	setcycle 9 Text_id 4
	setcycle 9 BLOCK 2
	setcycle 9 O_id 4
	setcycle 9 Link "https://www.doi.org/"
	setcycle 10 Content "04_PLS.txt"
	setcycle 10 NH N
	setcycle 10 OSA N
	setcycle 10 Text_id 4
	setcycle 10 BLOCK 3
	setcycle 10 O_id 4
	setcycle 10 Link "https://www.doi.org/"
	setcycle 11 Content "慢性病患者在疾病調適中有一定比例需面臨憂鬱的議題，而此一議題在近期漸漸受到重視，本研究主要目的即在探討慢性病患者在多元疾病調適歷程中影響憂鬱的相關因素。研究邀請兩類門診慢性病患者，包括高血壓患者110名與糖尿病患者117名，共227，男性121位，女性106位，平均年齡為60.94歲。經由研究邀請同意後請參與研究者填寫五份問卷：病後生活變動量表、預期健康控制量表、罹病情緒量表、自我照顧行為量表及貝克憂鬱量表第二版。結果證實研究路徑模式直接效果與間接效果部分成立；其中病後的生活變動透過罹病情緒間接影響憂鬱，預期控制透過自我照顧間接影響憂鬱，雙路徑中介效果成立。研究討論疾病調適憂鬱路徑的意義，並提出臨床服務的應用與建議，最後亦針對研究限制進行討論。"
	setcycle 11 NH ""
	setcycle 11 OSA Y
	setcycle 11 Text_id 4
	setcycle 11 BLOCK 1
	setcycle 11 O_id 4
	setcycle 11 Link "https://www.doi.org/"
	setcycle 12 Content "05_PLS.txt"
	setcycle 12 NH Y
	setcycle 12 OSA N
	setcycle 12 Text_id 5
	setcycle 12 BLOCK 3
	setcycle 12 O_id 5
	setcycle 12 Link "https://www.doi.org/"
	setcycle 13 Content "05_PLS.txt"
	setcycle 13 NH N
	setcycle 13 OSA N
	setcycle 13 Text_id 5
	setcycle 13 BLOCK 1
	setcycle 13 O_id 5
	setcycle 13 Link "https://www.doi.org/"
	setcycle 14 Content "代間關係品質被認為是影響長者老年生活適應的關鍵要素，近來已有研究指出成年子女是老年長者尋求安全支持並緩減擔憂煩惱的重要依附對象，但是目前不僅較少有研究探討影響代間依附關係的前置因素，同時也缺乏以成年子女—老年父母的代間對偶資料進行驗證的實徵研究。依據華人家庭對親子孝道倫理的重視，本研究探討成年子女對孝道信念的認同程度與其維繫親子關係連結的關係自主性對老年長者知覺子女可安全依附程度的影響，及其進而提升長者老年生活適應的作用效果。經由100位成年子女（平均年齡37.88歲；60%為女性）與其158位老年父母（平均年齡66.99歲；52%為女性）的代間對偶資料進行階層線性模式分析，結果指出：（1）成年子女的相互性孝道信念、權威性孝道信念及關係自主性皆具有提升老年長者知覺子女可安全依附程度的效果；（2）老年長者知覺子女可安全依附程度與其在老年生活中經驗到較少的憂鬱頻率、較高的生命意義感與自由需求滿足感有關；及（3）成年子女的孝道信念與關係自主性會透過長者知覺子女可安全依附程度的中介效果，進而降低長者經驗憂鬱感受的頻率，並提升其生命意義感與自由需求獲滿足的感受。本文綜合討論這些發現的理論意涵，提出研究限制與未來可延伸探討的方向。	"
	setcycle 14 NH N
	setcycle 14 OSA Y
	setcycle 14 Text_id 5
	setcycle 14 BLOCK 2
	setcycle 14 O_id 5
	setcycle 14 Link "https://www.doi.org/"
	setcycle 15 Content "06_PLS.txt"
	setcycle 15 NH Y
	setcycle 15 OSA N
	setcycle 15 Text_id 6
	setcycle 15 BLOCK 3
	setcycle 15 O_id 6
	setcycle 15 Link "https://www.doi.org/"
	setcycle 16 Content "06_PLS.txt"
	setcycle 16 NH N
	setcycle 16 OSA N
	setcycle 16 Text_id 6
	setcycle 16 BLOCK 2
	setcycle 16 O_id 6
	setcycle 16 Link "https://www.doi.org/"
	setcycle 17 Content "在運動團隊的相關研究中，教練採取嚴格的控制手段要求選手在訓練中付出努力，是十分常見的現象。過往亦有不少研究者從威權領導的理論觀點切入來探討此一現象，然而，儘管這些研究已累積了初步的研究成果，但多侷限於相似概念的質性訪談，沒有直接以實徵研究來釐清教練威權領導與選手努力行為的關係。因此，對於威權領導是否真的能促使選手付出更多努力，仍缺乏一明確的答案，形成了重要的研究缺口。為了彌補此一缺口，本研究依循雙向度威權領導的概念架構，將之區分為專權領導與尚嚴領導，並從領導權變觀點出發，提出了選手的目標導向作為邊界條件的理論模型。根據348筆大專甲組棒球員的資料顯示，尚嚴領導會提升選手的努力行為；但當選手擁有高逃避表現目標導向或高證明表現目標導向時，此一正向路徑的效果會弱化。另一方面，只有在選手擁有低證明表現目標導向時，專權領導才會對選手的努力行為具有負向預測效果。藉此，本研究釐清了教練的嚴格控制是否會促使選手更加努力，補足過往對此一重要現象缺乏實徵研究的缺口。	"
	setcycle 17 NH N
	setcycle 17 OSA Y
	setcycle 17 Text_id 6
	setcycle 17 BLOCK 1
	setcycle 17 O_id 6
	setcycle 17 Link "https://www.doi.org/"
	setcycle 18 Content "07_PLS.txt"
	setcycle 18 NH Y
	setcycle 18 OSA N
	setcycle 18 Text_id 7
	setcycle 18 BLOCK 1
	setcycle 18 O_id 7
	setcycle 18 Link "https://www.doi.org/"
	setcycle 19 Content "07_PLS.txt"
	setcycle 19 NH N
	setcycle 19 OSA N
	setcycle 19 Text_id 7
	setcycle 19 BLOCK 2
	setcycle 19 O_id 7
	setcycle 19 Link "https://www.doi.org/"
	setcycle 20 Content "Chen、Su及O'Seaghdha（2013）提出「現時延長假說」，實驗發現，中文的使用者相較於英文使用者，對「現在」的概念理解具有較高的延伸性；在劃分時間區塊時，中文使用者所標記的「現在」較英文使用者為長，且傾向將「過去」和「未來」的事件都表達為正在進行。本研究採用Cottle的「畫圓測驗」和「時間區段查點測驗」，進一步探討此一假說。從「畫圓測驗」的結果發現，當中文受試者畫三個圓圈來表達「過去」、「現在」和「未來」時，圓圈有66.7%的機會重疊，而「現在」通常在其描繪中扮演連結「過去」和「未來」的橋梁。「時間區段查點測驗」的結果顯示，定義「現在」的單位可以是秒、分，以及小時；相較之下，英文使用者的「現在」主要是以「秒」為單位。我們重新檢視「現時延長假說」，發現本研究支持其所提出的兩個概念：「現時延長」以及「時間融合」。雖然Chen等人認為這些差異主要是受到語言形態的影響，本研究認為即使在非語言的任務中，中文社群仍然有這些傾向，因此中文的因素也必須納入考量，方能得到最適當的解釋。	"
	setcycle 20 NH N
	setcycle 20 OSA Y
	setcycle 20 Text_id 7
	setcycle 20 BLOCK 3
	setcycle 20 O_id 7
	setcycle 20 Link "https://www.doi.org/"
	setcycle 21 Content "08_PLS.txt"
	setcycle 21 NH Y
	setcycle 21 OSA N
	setcycle 21 Text_id 8
	setcycle 21 BLOCK 1
	setcycle 21 O_id 8
	setcycle 21 Link "https://www.doi.org/"
	setcycle 22 Content "08_PLS.txt"
	setcycle 22 NH N
	setcycle 22 OSA N
	setcycle 22 Text_id 8
	setcycle 22 BLOCK 3
	setcycle 22 O_id 8
	setcycle 22 Link "https://www.doi.org/"
	setcycle 23 Content "強暴迷思的概念與測量具有在地性、變遷性，並與社會文化特色密切相關，因此不能僅移植西方的概念或使用西方的量表。本研究從傳統華人社會文化角度出發，提出華人的強暴迷思概念，並據以建立測量工具。華人重視家庭、關係、修身、德性、他人評價，故作者從這些面向思考並整合過去的研究經驗，提出華人家庭取向、貞潔取向、他人取向、與自省取向的強暴迷思特徵。本研究以無記名自陳式問卷調查法蒐集資料，研究對象包括5所公立、7所私立大學的學生，經剔除廢卷後得有效問卷969份。結果發現，上述華人強暴迷思的特徵中，家庭取向迷思可分為被害延伸與加害延伸兩項迷思，貞潔與他人取向迷思可合併為一個構念，而得到四項構念或分量表：被害延伸迷思、加害延伸迷思、貞潔與他人迷思、自省迷思。整體量表具備良好的內部一致性信度與組合信度，並具備構念效度、複合效度、與效標關聯效度。文末討論研究結果的理論意涵、實務應用、研究限制、與未來研究方向。	"
	setcycle 23 NH N
	setcycle 23 OSA Y
	setcycle 23 Text_id 8
	setcycle 23 BLOCK 2
	setcycle 23 O_id 8
	setcycle 23 Link "https://www.doi.org/"
	setcycle 24 Content "09_PLS.txt"
	setcycle 24 NH Y
	setcycle 24 OSA N
	setcycle 24 Text_id 9
	setcycle 24 BLOCK 2
	setcycle 24 O_id 9
	setcycle 24 Link "https://www.doi.org/"
	setcycle 25 Content "09_PLS.txt"
	setcycle 25 NH N
	setcycle 25 OSA N
	setcycle 25 Text_id 9
	setcycle 25 BLOCK 1
	setcycle 25 O_id 9
	setcycle 25 Link "https://www.doi.org/"
	setcycle 26 Content "本研究以台灣社群媒體上的分手文章為分析對象，比較兩種使用於文本分析的詞彙分析方式用於區辨作者性別時的優劣。使用封閉式詞彙分析時，本研究根據過去研究，以中文版LIWC詞典中的人稱代名詞與非代名詞類為預測變項，分別建立邏輯迴歸模型預測作者性別。結果顯示，人稱代名詞有較佳的預測力；唯其無法反映分手的特性。使用開放式詞彙分析時，本研究以寫作風格分析的演算法，直接從分手文章中找出最能代表不同性別的關鍵詞。結果發現即使只選取前1%的關鍵詞建立模型，模型的表現也優於以封閉式詞彙分析建立之模型。接著，針對各性別關鍵詞所對應的中文LIWC詞類，分別進行網路分析。根據網路節點的中間度指標，本研究發現動詞、副詞、關係詞、社交歷程詞、生理歷程詞和認知歷程詞為兩性分手文章中共有的LIWC心理語文特徵；但唯獨女性才有情感歷程詞、性詞和否定詞。由此推知，台灣社群媒體使用者中，女性比男性在文章中更有情感方面的表現。	"
	setcycle 26 NH N
	setcycle 26 OSA Y
	setcycle 26 Text_id 9
	setcycle 26 BLOCK 3
	setcycle 26 O_id 9
	setcycle 26 Link "https://www.doi.org/"
	setcycle 27 Content "10_PLS.txt"
	setcycle 27 NH Y
	setcycle 27 OSA N
	setcycle 27 Text_id 10
	setcycle 27 BLOCK 2
	setcycle 27 O_id 10
	setcycle 27 Link "https://www.doi.org/"
	setcycle 28 Content "10_PLS.txt"
	setcycle 28 NH N
	setcycle 28 OSA N
	setcycle 28 Text_id 10
	setcycle 28 BLOCK 3
	setcycle 28 O_id 10
	setcycle 28 Link "https://www.doi.org/"
	setcycle 29 Content "Baumeister認為自我調控是有限資源，但當個體處於自我耗竭狀態時，個體本身信念及作業重要性會有調節效果，使得個體有著較佳的表現。Tesser則強調所有的自我功能相互影響，共同運作於自我系統來維持正向自我評價。本研究則希望結合兩者，提出所有自控行為運作在同一自我系統下共影響來維持正向自我評價的想法。我們預期當個體正向自我評價受威脅，此時即便自我調控控制資源已被消耗，個體還是會有動機去調控資源，以自我設限的方式來維護自我評價，但卻不會更進一步去擴大自我評價。本研究首先透過二個預試找到合適的自我資源耗竭作業及自我設限作業，正式研究則為2（自我設限傾向：低 vs. 高）× 2（自我資源耗竭程度：低 vs. 高）× 2（叫色作業性質：妨礙相關 vs. 妨礙無關）的三因子參與者間實驗設計，以叫色作業正確完成題數為依變項。結果符合研究假設，當受到威脅、自我設限傾向高時，若告知叫色作業會妨礙表現，此時即便自我耗竭程度高，參與者仍會顯著完成比告知叫色作業與表現無關組更多的題數。而當參與者自我設限傾向低時，告知叫色作業會妨礙表現，則不管參與者是否仍有資源，他們的表現並無顯著差異。這些結果顯示自我調控作業作用於同一自我系統，在自我資源耗竭程度高時，個體還是會願意去調度資源盡力從事自我設限的自控作業來維持正向自我評價，但卻不會去擴大化自我評價。	"
	setcycle 29 NH N
	setcycle 29 OSA Y
	setcycle 29 Text_id 10
	setcycle 29 BLOCK 1
	setcycle 29 O_id 10
	setcycle 29 Link "https://www.doi.org/"
	setcycle 30 Content "11_PLS.txt"
	setcycle 30 NH Y
	setcycle 30 OSA N
	setcycle 30 Text_id 11
	setcycle 30 BLOCK 3
	setcycle 30 O_id 11
	setcycle 30 Link "https://www.doi.org/"
	setcycle 31 Content "11_PLS.txt"
	setcycle 31 NH N
	setcycle 31 OSA N
	setcycle 31 Text_id 11
	setcycle 31 BLOCK 1
	setcycle 31 O_id 11
	setcycle 31 Link "https://www.doi.org/"
	setcycle 32 Content "人工代理者雖然是機器，但和人類一樣常會做出具有偏誤的決策。本文討論人工代理者中常用的機器學習系統何時會學習去做偏誤決策，以及如何使用認知心理學與認知神經科學中發展出來的方法來瞭解其具有偏誤的決策歷程。具體而言，我們會闡述本質上是歸納推理的監督式機器學習如何導致如忽略少數團體等不透明的決策偏誤。接著，我們會視一個人工代理者如一位人類研究參與者，回顧文獻中如何透過腦部切除與影像遮蔽等認知科學中的神經與行為方法來揭露一個人工代理者的決策準則與傾向。在文末，我們會討論有偏誤的人工代理者對於社會的影響，並鼓勵認知科學家們一同來揭示並改正機器的各種偏誤。	"
	setcycle 32 NH N
	setcycle 32 OSA Y
	setcycle 32 Text_id 11
	setcycle 32 BLOCK 2
	setcycle 32 O_id 11
	setcycle 32 Link "https://www.doi.org/"
	setcycle 33 Content "12_PLS.txt"
	setcycle 33 NH Y
	setcycle 33 OSA N
	setcycle 33 Text_id 12
	setcycle 33 BLOCK 3
	setcycle 33 O_id 12
	setcycle 33 Link "https://www.doi.org/"
	setcycle 34 Content "12_PLS.txt"
	setcycle 34 NH N
	setcycle 34 OSA N
	setcycle 34 Text_id 12
	setcycle 34 BLOCK 2
	setcycle 34 O_id 12
	setcycle 34 Link "https://www.doi.org/"
	setcycle 35 Content "本研究從夫妻對偶互動觀點，探討夫妻間的幽默運用動機與運用型態，分析其對夫妻婚姻品質的影響。資料來源為大台北地區390對已婚夫妻，測量內容包括幽默動機、幽默型態、婚姻品質及其他人口控制變項，採取因素分析、潛在類型分析及階層線性模型等方法進行分析。主要結果顯示：（一）幽默運用之動機可分為利他動機、利關係動機及利己動機三因素；幽默型態則分為自我貶抑（以自己為玩笑題材）、挖苦嘲諷（以別人為玩笑題材）及詼諧戲謔（以文字為玩笑題材）三因素。利他與利關係的幽默動機、詼諧戲謔的幽默型態以及婚姻品質等方面，丈夫的分數均顯著高於妻子。（二）夫妻間幽默型態的運用類型可分為「夫詼諧自貶型」、「雙多元運用型」、「雙少用幽默型」及「妻嘲諷自貶型」，分別各占25%、25%、14%及35%。（三）利關係動機愈高的夫妻有愈高的充實感；而比起「妻嘲諷自貶型」夫妻，幽默運用類型為「夫詼諧自貶型」或「雙少用幽默型」的夫妻有較高的婚姻品質；此外，夫妻充實感因性別與幽默運用類型的交互作用，或幽默動機與運用類型的交互作用而不同。這些結果凸顯幽默在華人夫妻間的獨特意義與作用。	"
	setcycle 35 NH N
	setcycle 35 OSA Y
	setcycle 35 Text_id 12
	setcycle 35 BLOCK 1
	setcycle 35 O_id 12
	setcycle 35 Link "https://www.doi.org/"
	sortby BLOCK
	slice 0 12
	shuffle Text_id
	run text_seq

define loop text_CB2
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 36
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 Content "01_PLS.txt"
	setcycle 0 NH Y
	setcycle 0 OSA N
	setcycle 0 Text_id 1
	setcycle 0 BLOCK 2
	setcycle 0 O_id 1
	setcycle 0 Link "https://www.doi.org/"
	setcycle 1 Content "01_PLS.txt"
	setcycle 1 NH N
	setcycle 1 OSA N
	setcycle 1 Text_id 1
	setcycle 1 BLOCK 3
	setcycle 1 O_id 1
	setcycle 1 Link "https://www.doi.org/"
	setcycle 2 Content "廣義的他種族效應係指人們對本種族與他種族臉孔的處理方式有別，包括辨認本種族臉孔的優勢以及對混合種族臉孔的歸類偏誤。先前的種族臉孔歸類研究多以西方白種人社會為模型，本研究欲延伸至單一種族的台灣社會，我們採用變形臉孔典範探討台灣成人與學齡期兒童對種族混合臉孔的分類表現。實驗一為成人（N = 33）的種族分類作業，測試成人對不同比例亞洲人／白人混合臉孔的種族分類傾向；實驗二為學齡期兒童，測試7 ～ 8歲（N =21）、9 ～ 10歲（N = 22）與11 ～ 12歲（N = 22）兒童的種族分類傾向。結果發現，隨變形臉孔中的亞洲人成分增加，參與者將該臉孔分類為亞洲人的比率隨之提高；而針對亞洲人成分50%的臉孔，7 ～ 8歲組傾向將其歸類為亞洲人，而9 ～ 10歲組、11 ～ 12歲組及成人則都傾向將之歸類為白人。反應時間分析顯示愈靠近兩個端點的反應時間愈短（表示兩端的臉孔容易歸類），愈靠近中間的臉孔反應時間愈長（較困難）。最後，曲線擬合結果顯示，成人將目標臉孔分類為亞洲人的機率達一半（閾值），所需的亞洲人成分為56.01%；7 ～ 8歲組的閾值為49.52%，表現出中立的歸類傾向；而9 ～ 10歲及11 ～ 12歲組的閾值分別為54.27%、53.13%，有隨年齡略增加的趨勢。整體而言，本研究提供種族臉孔歸類偏誤在兒童期發展的跨文化證據。"
	setcycle 2 NH ""
	setcycle 2 OSA Y
	setcycle 2 Text_id 1
	setcycle 2 BLOCK 1
	setcycle 2 O_id 1
	setcycle 2 Link "https://www.doi.org/"
	setcycle 3 Content "02_PLS.txt"
	setcycle 3 NH Y
	setcycle 3 OSA N
	setcycle 3 Text_id 2
	setcycle 3 BLOCK 2
	setcycle 3 O_id 2
	setcycle 3 Link "https://www.doi.org/"
	setcycle 4 Content "02_PLS.txt"
	setcycle 4 NH N
	setcycle 4 OSA N
	setcycle 4 Text_id 2
	setcycle 4 BLOCK 1
	setcycle 4 O_id 2
	setcycle 4 Link "https://www.doi.org/"
	setcycle 5 Content "廣義的他種族效應係指人們對本種族與他種族臉孔的處理方式有別，包括辨認本種族臉孔的優勢以及對混合種族臉孔的歸類偏誤。先前的種族臉孔歸類研究多以西方白種人社會為模型，本研究欲延伸至單一種族的台灣社會，我們採用變形臉孔典範探討台灣成人與學齡期兒童對種族混合臉孔的分類表現。實驗一為成人（N = 33）的種族分類作業，測試成人對不同比例亞洲人／白人混合臉孔的種族分類傾向；實驗二為學齡期兒童，測試7 ～ 8歲（N =21）、9 ～ 10歲（N = 22）與11 ～ 12歲（N = 22）兒童的種族分類傾向。結果發現，隨變形臉孔中的亞洲人成分增加，參與者將該臉孔分類為亞洲人的比率隨之提高；而針對亞洲人成分50%的臉孔，7 ～ 8歲組傾向將其歸類為亞洲人，而9 ～ 10歲組、11 ～ 12歲組及成人則都傾向將之歸類為白人。反應時間分析顯示愈靠近兩個端點的反應時間愈短（表示兩端的臉孔容易歸類），愈靠近中間的臉孔反應時間愈長（較困難）。最後，曲線擬合結果顯示，成人將目標臉孔分類為亞洲人的機率達一半（閾值），所需的亞洲人成分為56.01%；7 ～ 8歲組的閾值為49.52%，表現出中立的歸類傾向；而9 ～ 10歲及11 ～ 12歲組的閾值分別為54.27%、53.13%，有隨年齡略增加的趨勢。整體而言，本研究提供種族臉孔歸類偏誤在兒童期發展的跨文化證據。"
	setcycle 5 NH ""
	setcycle 5 OSA Y
	setcycle 5 Text_id 2
	setcycle 5 BLOCK 3
	setcycle 5 O_id 2
	setcycle 5 Link "https://www.doi.org/"
	setcycle 6 Content "03_PLS.txt"
	setcycle 6 NH Y
	setcycle 6 OSA N
	setcycle 6 Text_id 3
	setcycle 6 BLOCK 3
	setcycle 6 O_id 3
	setcycle 6 Link "https://www.doi.org/"
	setcycle 7 Content "03_PLS.txt"
	setcycle 7 NH N
	setcycle 7 OSA N
	setcycle 7 Text_id 3
	setcycle 7 BLOCK 2
	setcycle 7 O_id 3
	setcycle 7 Link "https://www.doi.org/"
	setcycle 8 Content "注意力不足過動症（ADHD）兒童的核心症狀雖然是注意力不足、過動／衝動，但情緒調控問題近來亦受到關切。本研究的目的為從家庭情緒脈絡觀點，探討「父母情緒表達」、「父母情緒教養」、及「家庭的情緒氣氛」對ADHD兒童情緒調控的預測，並比較ADHD兒童及控制組兒童在情緒調控能力及家庭情緒脈絡之差異。研究對象為60位ADHD學齡兒童及60位控制組兒童及其父母。研究方式包括由父母及兒童問卷評量，並透過模擬情境法測量兒童觀看父母衝突影片後的情緒反應及情緒調控能力。結果發現，ADHD兒童自覺害怕與難過強度較弱、平復害怕所需的時間較短、對害怕與生氣情緒的平復程度較容易；但父母評量結果則呈現ADHD兒童日常生活中害怕、難過、生氣之情緒較強烈，且情緒調控能力較弱。兩組兒童之家庭情緒脈絡顯示，ADHD兒童之父母負向情緒表達較多；較多摒除型及失控型情緒理念；較多父母衝突，父子依戀及母子依戀程度較弱。但其中對ADHD兒童情緒反應及情緒調控能力最具預測力的是父母的後設情緒理念，尤其當控制了兒童的症狀之後，父母情緒理念可以預測ADHD兒童的情緒反應及情緒調控能力。本研究顯示父母後設情緒理念對ADHD兒童情緒反應及情緒調控之重要性，此結果可提供臨床工作者訓練ADHD兒童調控情緒之參考。"
	setcycle 8 NH ""
	setcycle 8 OSA Y
	setcycle 8 Text_id 3
	setcycle 8 BLOCK 1
	setcycle 8 O_id 3
	setcycle 8 Link "https://www.doi.org/"
	setcycle 9 Content "04_PLS.txt"
	setcycle 9 NH Y
	setcycle 9 OSA N
	setcycle 9 Text_id 4
	setcycle 9 BLOCK 3
	setcycle 9 O_id 4
	setcycle 9 Link "https://www.doi.org/"
	setcycle 10 Content "04_PLS.txt"
	setcycle 10 NH N
	setcycle 10 OSA N
	setcycle 10 Text_id 4
	setcycle 10 BLOCK 1
	setcycle 10 O_id 4
	setcycle 10 Link "https://www.doi.org/"
	setcycle 11 Content "慢性病患者在疾病調適中有一定比例需面臨憂鬱的議題，而此一議題在近期漸漸受到重視，本研究主要目的即在探討慢性病患者在多元疾病調適歷程中影響憂鬱的相關因素。研究邀請兩類門診慢性病患者，包括高血壓患者110名與糖尿病患者117名，共227，男性121位，女性106位，平均年齡為60.94歲。經由研究邀請同意後請參與研究者填寫五份問卷：病後生活變動量表、預期健康控制量表、罹病情緒量表、自我照顧行為量表及貝克憂鬱量表第二版。結果證實研究路徑模式直接效果與間接效果部分成立；其中病後的生活變動透過罹病情緒間接影響憂鬱，預期控制透過自我照顧間接影響憂鬱，雙路徑中介效果成立。研究討論疾病調適憂鬱路徑的意義，並提出臨床服務的應用與建議，最後亦針對研究限制進行討論。"
	setcycle 11 NH ""
	setcycle 11 OSA Y
	setcycle 11 Text_id 4
	setcycle 11 BLOCK 2
	setcycle 11 O_id 4
	setcycle 11 Link "https://www.doi.org/"
	setcycle 12 Content "05_PLS.txt"
	setcycle 12 NH Y
	setcycle 12 OSA N
	setcycle 12 Text_id 5
	setcycle 12 BLOCK 1
	setcycle 12 O_id 5
	setcycle 12 Link "https://www.doi.org/"
	setcycle 13 Content "05_PLS.txt"
	setcycle 13 NH N
	setcycle 13 OSA N
	setcycle 13 Text_id 5
	setcycle 13 BLOCK 2
	setcycle 13 O_id 5
	setcycle 13 Link "https://www.doi.org/"
	setcycle 14 Content "代間關係品質被認為是影響長者老年生活適應的關鍵要素，近來已有研究指出成年子女是老年長者尋求安全支持並緩減擔憂煩惱的重要依附對象，但是目前不僅較少有研究探討影響代間依附關係的前置因素，同時也缺乏以成年子女—老年父母的代間對偶資料進行驗證的實徵研究。依據華人家庭對親子孝道倫理的重視，本研究探討成年子女對孝道信念的認同程度與其維繫親子關係連結的關係自主性對老年長者知覺子女可安全依附程度的影響，及其進而提升長者老年生活適應的作用效果。經由100位成年子女（平均年齡37.88歲；60%為女性）與其158位老年父母（平均年齡66.99歲；52%為女性）的代間對偶資料進行階層線性模式分析，結果指出：（1）成年子女的相互性孝道信念、權威性孝道信念及關係自主性皆具有提升老年長者知覺子女可安全依附程度的效果；（2）老年長者知覺子女可安全依附程度與其在老年生活中經驗到較少的憂鬱頻率、較高的生命意義感與自由需求滿足感有關；及（3）成年子女的孝道信念與關係自主性會透過長者知覺子女可安全依附程度的中介效果，進而降低長者經驗憂鬱感受的頻率，並提升其生命意義感與自由需求獲滿足的感受。本文綜合討論這些發現的理論意涵，提出研究限制與未來可延伸探討的方向。	"
	setcycle 14 NH N
	setcycle 14 OSA Y
	setcycle 14 Text_id 5
	setcycle 14 BLOCK 3
	setcycle 14 O_id 5
	setcycle 14 Link "https://www.doi.org/"
	setcycle 15 Content "06_PLS.txt"
	setcycle 15 NH Y
	setcycle 15 OSA N
	setcycle 15 Text_id 6
	setcycle 15 BLOCK 1
	setcycle 15 O_id 6
	setcycle 15 Link "https://www.doi.org/"
	setcycle 16 Content "06_PLS.txt"
	setcycle 16 NH N
	setcycle 16 OSA N
	setcycle 16 Text_id 6
	setcycle 16 BLOCK 3
	setcycle 16 O_id 6
	setcycle 16 Link "https://www.doi.org/"
	setcycle 17 Content "在運動團隊的相關研究中，教練採取嚴格的控制手段要求選手在訓練中付出努力，是十分常見的現象。過往亦有不少研究者從威權領導的理論觀點切入來探討此一現象，然而，儘管這些研究已累積了初步的研究成果，但多侷限於相似概念的質性訪談，沒有直接以實徵研究來釐清教練威權領導與選手努力行為的關係。因此，對於威權領導是否真的能促使選手付出更多努力，仍缺乏一明確的答案，形成了重要的研究缺口。為了彌補此一缺口，本研究依循雙向度威權領導的概念架構，將之區分為專權領導與尚嚴領導，並從領導權變觀點出發，提出了選手的目標導向作為邊界條件的理論模型。根據348筆大專甲組棒球員的資料顯示，尚嚴領導會提升選手的努力行為；但當選手擁有高逃避表現目標導向或高證明表現目標導向時，此一正向路徑的效果會弱化。另一方面，只有在選手擁有低證明表現目標導向時，專權領導才會對選手的努力行為具有負向預測效果。藉此，本研究釐清了教練的嚴格控制是否會促使選手更加努力，補足過往對此一重要現象缺乏實徵研究的缺口。"
	setcycle 17 NH ""
	setcycle 17 OSA Y
	setcycle 17 Text_id 6
	setcycle 17 BLOCK 2
	setcycle 17 O_id 6
	setcycle 17 Link "https://www.doi.org/"
	setcycle 18 Content "07_PLS.txt"
	setcycle 18 NH Y
	setcycle 18 OSA N
	setcycle 18 Text_id 7
	setcycle 18 BLOCK 2
	setcycle 18 O_id 7
	setcycle 18 Link "https://www.doi.org/"
	setcycle 19 Content "07_PLS.txt"
	setcycle 19 NH N
	setcycle 19 OSA N
	setcycle 19 Text_id 7
	setcycle 19 BLOCK 3
	setcycle 19 O_id 7
	setcycle 19 Link "https://www.doi.org/"
	setcycle 20 Content "Chen、Su及O'Seaghdha（2013）提出「現時延長假說」，實驗發現，中文的使用者相較於英文使用者，對「現在」的概念理解具有較高的延伸性；在劃分時間區塊時，中文使用者所標記的「現在」較英文使用者為長，且傾向將「過去」和「未來」的事件都表達為正在進行。本研究採用Cottle的「畫圓測驗」和「時間區段查點測驗」，進一步探討此一假說。從「畫圓測驗」的結果發現，當中文受試者畫三個圓圈來表達「過去」、「現在」和「未來」時，圓圈有66.7%的機會重疊，而「現在」通常在其描繪中扮演連結「過去」和「未來」的橋梁。「時間區段查點測驗」的結果顯示，定義「現在」的單位可以是秒、分，以及小時；相較之下，英文使用者的「現在」主要是以「秒」為單位。我們重新檢視「現時延長假說」，發現本研究支持其所提出的兩個概念：「現時延長」以及「時間融合」。雖然Chen等人認為這些差異主要是受到語言形態的影響，本研究認為即使在非語言的任務中，中文社群仍然有這些傾向，因此中文的因素也必須納入考量，方能得到最適當的解釋。"
	setcycle 20 NH ""
	setcycle 20 OSA Y
	setcycle 20 Text_id 7
	setcycle 20 BLOCK 1
	setcycle 20 O_id 7
	setcycle 20 Link "https://www.doi.org/"
	setcycle 21 Content "08_PLS.txt"
	setcycle 21 NH Y
	setcycle 21 OSA N
	setcycle 21 Text_id 8
	setcycle 21 BLOCK 2
	setcycle 21 O_id 8
	setcycle 21 Link "https://www.doi.org/"
	setcycle 22 Content "08_PLS.txt"
	setcycle 22 NH N
	setcycle 22 OSA N
	setcycle 22 Text_id 8
	setcycle 22 BLOCK 1
	setcycle 22 O_id 8
	setcycle 22 Link "https://www.doi.org/"
	setcycle 23 Content "強暴迷思的概念與測量具有在地性、變遷性，並與社會文化特色密切相關，因此不能僅移植西方的概念或使用西方的量表。本研究從傳統華人社會文化角度出發，提出華人的強暴迷思概念，並據以建立測量工具。華人重視家庭、關係、修身、德性、他人評價，故作者從這些面向思考並整合過去的研究經驗，提出華人家庭取向、貞潔取向、他人取向、與自省取向的強暴迷思特徵。本研究以無記名自陳式問卷調查法蒐集資料，研究對象包括5所公立、7所私立大學的學生，經剔除廢卷後得有效問卷969份。結果發現，上述華人強暴迷思的特徵中，家庭取向迷思可分為被害延伸與加害延伸兩項迷思，貞潔與他人取向迷思可合併為一個構念，而得到四項構念或分量表：被害延伸迷思、加害延伸迷思、貞潔與他人迷思、自省迷思。整體量表具備良好的內部一致性信度與組合信度，並具備構念效度、複合效度、與效標關聯效度。文末討論研究結果的理論意涵、實務應用、研究限制、與未來研究方向。	"
	setcycle 23 NH N
	setcycle 23 OSA Y
	setcycle 23 Text_id 8
	setcycle 23 BLOCK 3
	setcycle 23 O_id 8
	setcycle 23 Link "https://www.doi.org/"
	setcycle 24 Content "09_PLS.txt"
	setcycle 24 NH Y
	setcycle 24 OSA N
	setcycle 24 Text_id 9
	setcycle 24 BLOCK 3
	setcycle 24 O_id 9
	setcycle 24 Link "https://www.doi.org/"
	setcycle 25 Content "09_PLS.txt"
	setcycle 25 NH N
	setcycle 25 OSA N
	setcycle 25 Text_id 9
	setcycle 25 BLOCK 2
	setcycle 25 O_id 9
	setcycle 25 Link "https://www.doi.org/"
	setcycle 26 Content "本研究以台灣社群媒體上的分手文章為分析對象，比較兩種使用於文本分析的詞彙分析方式用於區辨作者性別時的優劣。使用封閉式詞彙分析時，本研究根據過去研究，以中文版LIWC詞典中的人稱代名詞與非代名詞類為預測變項，分別建立邏輯迴歸模型預測作者性別。結果顯示，人稱代名詞有較佳的預測力；唯其無法反映分手的特性。使用開放式詞彙分析時，本研究以寫作風格分析的演算法，直接從分手文章中找出最能代表不同性別的關鍵詞。結果發現即使只選取前1%的關鍵詞建立模型，模型的表現也優於以封閉式詞彙分析建立之模型。接著，針對各性別關鍵詞所對應的中文LIWC詞類，分別進行網路分析。根據網路節點的中間度指標，本研究發現動詞、副詞、關係詞、社交歷程詞、生理歷程詞和認知歷程詞為兩性分手文章中共有的LIWC心理語文特徵；但唯獨女性才有情感歷程詞、性詞和否定詞。由此推知，台灣社群媒體使用者中，女性比男性在文章中更有情感方面的表現。"
	setcycle 26 NH ""
	setcycle 26 OSA Y
	setcycle 26 Text_id 9
	setcycle 26 BLOCK 1
	setcycle 26 O_id 9
	setcycle 26 Link "https://www.doi.org/"
	setcycle 27 Content "10_PLS.txt"
	setcycle 27 NH Y
	setcycle 27 OSA N
	setcycle 27 Text_id 10
	setcycle 27 BLOCK 3
	setcycle 27 O_id 10
	setcycle 27 Link "https://www.doi.org/"
	setcycle 28 Content "10_PLS.txt"
	setcycle 28 NH N
	setcycle 28 OSA N
	setcycle 28 Text_id 10
	setcycle 28 BLOCK 1
	setcycle 28 O_id 10
	setcycle 28 Link "https://www.doi.org/"
	setcycle 29 Content "Baumeister認為自我調控是有限資源，但當個體處於自我耗竭狀態時，個體本身信念及作業重要性會有調節效果，使得個體有著較佳的表現。Tesser則強調所有的自我功能相互影響，共同運作於自我系統來維持正向自我評價。本研究則希望結合兩者，提出所有自控行為運作在同一自我系統下共影響來維持正向自我評價的想法。我們預期當個體正向自我評價受威脅，此時即便自我調控控制資源已被消耗，個體還是會有動機去調控資源，以自我設限的方式來維護自我評價，但卻不會更進一步去擴大自我評價。本研究首先透過二個預試找到合適的自我資源耗竭作業及自我設限作業，正式研究則為2（自我設限傾向：低 vs. 高）× 2（自我資源耗竭程度：低 vs. 高）× 2（叫色作業性質：妨礙相關 vs. 妨礙無關）的三因子參與者間實驗設計，以叫色作業正確完成題數為依變項。結果符合研究假設，當受到威脅、自我設限傾向高時，若告知叫色作業會妨礙表現，此時即便自我耗竭程度高，參與者仍會顯著完成比告知叫色作業與表現無關組更多的題數。而當參與者自我設限傾向低時，告知叫色作業會妨礙表現，則不管參與者是否仍有資源，他們的表現並無顯著差異。這些結果顯示自我調控作業作用於同一自我系統，在自我資源耗竭程度高時，個體還是會願意去調度資源盡力從事自我設限的自控作業來維持正向自我評價，但卻不會去擴大化自我評價。"
	setcycle 29 NH ""
	setcycle 29 OSA Y
	setcycle 29 Text_id 10
	setcycle 29 BLOCK 2
	setcycle 29 O_id 10
	setcycle 29 Link "https://www.doi.org/"
	setcycle 30 Content "11_PLS.txt"
	setcycle 30 NH Y
	setcycle 30 OSA N
	setcycle 30 Text_id 11
	setcycle 30 BLOCK 1
	setcycle 30 O_id 11
	setcycle 30 Link "https://www.doi.org/"
	setcycle 31 Content "11_PLS.txt"
	setcycle 31 NH N
	setcycle 31 OSA N
	setcycle 31 Text_id 11
	setcycle 31 BLOCK 2
	setcycle 31 O_id 11
	setcycle 31 Link "https://www.doi.org/"
	setcycle 32 Content "人工代理者雖然是機器，但和人類一樣常會做出具有偏誤的決策。本文討論人工代理者中常用的機器學習系統何時會學習去做偏誤決策，以及如何使用認知心理學與認知神經科學中發展出來的方法來瞭解其具有偏誤的決策歷程。具體而言，我們會闡述本質上是歸納推理的監督式機器學習如何導致如忽略少數團體等不透明的決策偏誤。接著，我們會視一個人工代理者如一位人類研究參與者，回顧文獻中如何透過腦部切除與影像遮蔽等認知科學中的神經與行為方法來揭露一個人工代理者的決策準則與傾向。在文末，我們會討論有偏誤的人工代理者對於社會的影響，並鼓勵認知科學家們一同來揭示並改正機器的各種偏誤。"
	setcycle 32 NH ""
	setcycle 32 OSA Y
	setcycle 32 Text_id 11
	setcycle 32 BLOCK 3
	setcycle 32 O_id 11
	setcycle 32 Link "https://www.doi.org/"
	setcycle 33 Content "12_PLS.txt"
	setcycle 33 NH Y
	setcycle 33 OSA N
	setcycle 33 Text_id 12
	setcycle 33 BLOCK 1
	setcycle 33 O_id 12
	setcycle 33 Link "https://www.doi.org/"
	setcycle 34 Content "12_PLS.txt"
	setcycle 34 NH N
	setcycle 34 OSA N
	setcycle 34 Text_id 12
	setcycle 34 BLOCK 3
	setcycle 34 O_id 12
	setcycle 34 Link "https://www.doi.org/"
	setcycle 35 Content "本研究從夫妻對偶互動觀點，探討夫妻間的幽默運用動機與運用型態，分析其對夫妻婚姻品質的影響。資料來源為大台北地區390對已婚夫妻，測量內容包括幽默動機、幽默型態、婚姻品質及其他人口控制變項，採取因素分析、潛在類型分析及階層線性模型等方法進行分析。主要結果顯示：（一）幽默運用之動機可分為利他動機、利關係動機及利己動機三因素；幽默型態則分為自我貶抑（以自己為玩笑題材）、挖苦嘲諷（以別人為玩笑題材）及詼諧戲謔（以文字為玩笑題材）三因素。利他與利關係的幽默動機、詼諧戲謔的幽默型態以及婚姻品質等方面，丈夫的分數均顯著高於妻子。（二）夫妻間幽默型態的運用類型可分為「夫詼諧自貶型」、「雙多元運用型」、「雙少用幽默型」及「妻嘲諷自貶型」，分別各占25%、25%、14%及35%。（三）利關係動機愈高的夫妻有愈高的充實感；而比起「妻嘲諷自貶型」夫妻，幽默運用類型為「夫詼諧自貶型」或「雙少用幽默型」的夫妻有較高的婚姻品質；此外，夫妻充實感因性別與幽默運用類型的交互作用，或幽默動機與運用類型的交互作用而不同。這些結果凸顯幽默在華人夫妻間的獨特意義與作用。"
	setcycle 35 NH ""
	setcycle 35 OSA Y
	setcycle 35 Text_id 12
	setcycle 35 BLOCK 2
	setcycle 35 O_id 12
	setcycle 35 Link "https://www.doi.org/"
	sortby BLOCK
	slice 0 12
	shuffle Text_id
	run text_seq

define loop text_CB3
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 36
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 Content "01_PLS.txt"
	setcycle 0 NH Y
	setcycle 0 OSA N
	setcycle 0 Text_id 1
	setcycle 0 BLOCK 3
	setcycle 0 O_id 1
	setcycle 0 Link "https://www.doi.org/"
	setcycle 1 Content "01_PLS.txt"
	setcycle 1 NH N
	setcycle 1 OSA N
	setcycle 1 Text_id 1
	setcycle 1 BLOCK 1
	setcycle 1 O_id 1
	setcycle 1 Link "https://www.doi.org/"
	setcycle 2 Content "過去雖有實徵研究認定努力與學業成就在儒家社會中具道德性，但其立論皆以參與者對學業活動的意見而間接推論，並未直接檢驗參與者對努力及學業成就之道德判定。一方面儒家文化以角色義務為基礎的道德觀可能將「努力」與「學業成就」視為學子應盡的道德義務；另一方面，社會—認知範疇理論則視盡義務與否僅代表社會成規議題而非道德議題。據此，本研究將探討台灣青少年對努力與學業成就的看法較符合由儒家學說衍生之道德義務假設、或較符合社會—認知範疇理論之推論。鑒於儒家文化視某些角色義務具有不分情況皆須積極奉行之無條件積極性，本研究亦探究青少年對努力及學業成就之無條件積極性的社會成規判定與道德判定，並對照學子對典型之無條件積極義務「孝道」之看法。共148位大學生與158位高中生填寫有關「努力」、「學業成就」、「孝道」是否具社會成規或道德屬性之問卷。以t檢定發現，「努力」具道德屬性的論述未被青少年認可；「努力」雖被視為具社會成規屬性但不具無條件積極性，且其強度仍不及「孝道」；「學業成就」則未被認可屬於道德或社會成規。換言之，努力具道德性並非台灣青少年之共識。"
	setcycle 2 NH ""
	setcycle 2 OSA Y
	setcycle 2 Text_id 1
	setcycle 2 BLOCK 2
	setcycle 2 O_id 1
	setcycle 2 Link "https://www.doi.org/"
	setcycle 3 Content "02_PLS.txt"
	setcycle 3 NH Y
	setcycle 3 OSA N
	setcycle 3 Text_id 2
	setcycle 3 BLOCK 3
	setcycle 3 O_id 2
	setcycle 3 Link "https://www.doi.org/"
	setcycle 4 Content "02_PLS.txt"
	setcycle 4 NH N
	setcycle 4 OSA N
	setcycle 4 Text_id 2
	setcycle 4 BLOCK 2
	setcycle 4 O_id 2
	setcycle 4 Link "https://www.doi.org/"
	setcycle 5 Content "廣義的他種族效應係指人們對本種族與他種族臉孔的處理方式有別，包括辨認本種族臉孔的優勢以及對混合種族臉孔的歸類偏誤。先前的種族臉孔歸類研究多以西方白種人社會為模型，本研究欲延伸至單一種族的台灣社會，我們採用變形臉孔典範探討台灣成人與學齡期兒童對種族混合臉孔的分類表現。實驗一為成人（N = 33）的種族分類作業，測試成人對不同比例亞洲人／白人混合臉孔的種族分類傾向；實驗二為學齡期兒童，測試7 ～ 8歲（N =21）、9 ～ 10歲（N = 22）與11 ～ 12歲（N = 22）兒童的種族分類傾向。結果發現，隨變形臉孔中的亞洲人成分增加，參與者將該臉孔分類為亞洲人的比率隨之提高；而針對亞洲人成分50%的臉孔，7 ～ 8歲組傾向將其歸類為亞洲人，而9 ～ 10歲組、11 ～ 12歲組及成人則都傾向將之歸類為白人。反應時間分析顯示愈靠近兩個端點的反應時間愈短（表示兩端的臉孔容易歸類），愈靠近中間的臉孔反應時間愈長（較困難）。最後，曲線擬合結果顯示，成人將目標臉孔分類為亞洲人的機率達一半（閾值），所需的亞洲人成分為56.01%；7 ～ 8歲組的閾值為49.52%，表現出中立的歸類傾向；而9 ～ 10歲及11 ～ 12歲組的閾值分別為54.27%、53.13%，有隨年齡略增加的趨勢。整體而言，本研究提供種族臉孔歸類偏誤在兒童期發展的跨文化證據。"
	setcycle 5 NH ""
	setcycle 5 OSA Y
	setcycle 5 Text_id 2
	setcycle 5 BLOCK 1
	setcycle 5 O_id 2
	setcycle 5 Link "https://www.doi.org/"
	setcycle 6 Content "03_PLS.txt"
	setcycle 6 NH Y
	setcycle 6 OSA N
	setcycle 6 Text_id 3
	setcycle 6 BLOCK 1
	setcycle 6 O_id 3
	setcycle 6 Link "https://www.doi.org/"
	setcycle 7 Content "03_PLS.txt"
	setcycle 7 NH N
	setcycle 7 OSA N
	setcycle 7 Text_id 3
	setcycle 7 BLOCK 3
	setcycle 7 O_id 3
	setcycle 7 Link "https://www.doi.org/"
	setcycle 8 Content "注意力不足過動症（ADHD）兒童的核心症狀雖然是注意力不足、過動／衝動，但情緒調控問題近來亦受到關切。本研究的目的為從家庭情緒脈絡觀點，探討「父母情緒表達」、「父母情緒教養」、及「家庭的情緒氣氛」對ADHD兒童情緒調控的預測，並比較ADHD兒童及控制組兒童在情緒調控能力及家庭情緒脈絡之差異。研究對象為60位ADHD學齡兒童及60位控制組兒童及其父母。研究方式包括由父母及兒童問卷評量，並透過模擬情境法測量兒童觀看父母衝突影片後的情緒反應及情緒調控能力。結果發現，ADHD兒童自覺害怕與難過強度較弱、平復害怕所需的時間較短、對害怕與生氣情緒的平復程度較容易；但父母評量結果則呈現ADHD兒童日常生活中害怕、難過、生氣之情緒較強烈，且情緒調控能力較弱。兩組兒童之家庭情緒脈絡顯示，ADHD兒童之父母負向情緒表達較多；較多摒除型及失控型情緒理念；較多父母衝突，父子依戀及母子依戀程度較弱。但其中對ADHD兒童情緒反應及情緒調控能力最具預測力的是父母的後設情緒理念，尤其當控制了兒童的症狀之後，父母情緒理念可以預測ADHD兒童的情緒反應及情緒調控能力。本研究顯示父母後設情緒理念對ADHD兒童情緒反應及情緒調控之重要性，此結果可提供臨床工作者訓練ADHD兒童調控情緒之參考。	"
	setcycle 8 NH N
	setcycle 8 OSA Y
	setcycle 8 Text_id 3
	setcycle 8 BLOCK 2
	setcycle 8 O_id 3
	setcycle 8 Link "https://www.doi.org/"
	setcycle 9 Content "04_PLS.txt"
	setcycle 9 NH Y
	setcycle 9 OSA N
	setcycle 9 Text_id 4
	setcycle 9 BLOCK 1
	setcycle 9 O_id 4
	setcycle 9 Link "https://www.doi.org/"
	setcycle 10 Content "04_PLS.txt"
	setcycle 10 NH N
	setcycle 10 OSA N
	setcycle 10 Text_id 4
	setcycle 10 BLOCK 2
	setcycle 10 O_id 4
	setcycle 10 Link "https://www.doi.org/"
	setcycle 11 Content "慢性病患者在疾病調適中有一定比例需面臨憂鬱的議題，而此一議題在近期漸漸受到重視，本研究主要目的即在探討慢性病患者在多元疾病調適歷程中影響憂鬱的相關因素。研究邀請兩類門診慢性病患者，包括高血壓患者110名與糖尿病患者117名，共227，男性121位，女性106位，平均年齡為60.94歲。經由研究邀請同意後請參與研究者填寫五份問卷：病後生活變動量表、預期健康控制量表、罹病情緒量表、自我照顧行為量表及貝克憂鬱量表第二版。結果證實研究路徑模式直接效果與間接效果部分成立；其中病後的生活變動透過罹病情緒間接影響憂鬱，預期控制透過自我照顧間接影響憂鬱，雙路徑中介效果成立。研究討論疾病調適憂鬱路徑的意義，並提出臨床服務的應用與建議，最後亦針對研究限制進行討論。"
	setcycle 11 NH ""
	setcycle 11 OSA Y
	setcycle 11 Text_id 4
	setcycle 11 BLOCK 3
	setcycle 11 O_id 4
	setcycle 11 Link "https://www.doi.org/"
	setcycle 12 Content "05_PLS.txt"
	setcycle 12 NH Y
	setcycle 12 OSA N
	setcycle 12 Text_id 5
	setcycle 12 BLOCK 2
	setcycle 12 O_id 5
	setcycle 12 Link "https://www.doi.org/"
	setcycle 13 Content "05_PLS.txt"
	setcycle 13 NH N
	setcycle 13 OSA N
	setcycle 13 Text_id 5
	setcycle 13 BLOCK 3
	setcycle 13 O_id 5
	setcycle 13 Link "https://www.doi.org/"
	setcycle 14 Content "代間關係品質被認為是影響長者老年生活適應的關鍵要素，近來已有研究指出成年子女是老年長者尋求安全支持並緩減擔憂煩惱的重要依附對象，但是目前不僅較少有研究探討影響代間依附關係的前置因素，同時也缺乏以成年子女—老年父母的代間對偶資料進行驗證的實徵研究。依據華人家庭對親子孝道倫理的重視，本研究探討成年子女對孝道信念的認同程度與其維繫親子關係連結的關係自主性對老年長者知覺子女可安全依附程度的影響，及其進而提升長者老年生活適應的作用效果。經由100位成年子女（平均年齡37.88歲；60%為女性）與其158位老年父母（平均年齡66.99歲；52%為女性）的代間對偶資料進行階層線性模式分析，結果指出：（1）成年子女的相互性孝道信念、權威性孝道信念及關係自主性皆具有提升老年長者知覺子女可安全依附程度的效果；（2）老年長者知覺子女可安全依附程度與其在老年生活中經驗到較少的憂鬱頻率、較高的生命意義感與自由需求滿足感有關；及（3）成年子女的孝道信念與關係自主性會透過長者知覺子女可安全依附程度的中介效果，進而降低長者經驗憂鬱感受的頻率，並提升其生命意義感與自由需求獲滿足的感受。本文綜合討論這些發現的理論意涵，提出研究限制與未來可延伸探討的方向。"
	setcycle 14 NH ""
	setcycle 14 OSA Y
	setcycle 14 Text_id 5
	setcycle 14 BLOCK 1
	setcycle 14 O_id 5
	setcycle 14 Link "https://www.doi.org/"
	setcycle 15 Content "06_PLS.txt"
	setcycle 15 NH Y
	setcycle 15 OSA N
	setcycle 15 Text_id 6
	setcycle 15 BLOCK 2
	setcycle 15 O_id 6
	setcycle 15 Link "https://www.doi.org/"
	setcycle 16 Content "06_PLS.txt"
	setcycle 16 NH N
	setcycle 16 OSA N
	setcycle 16 Text_id 6
	setcycle 16 BLOCK 1
	setcycle 16 O_id 6
	setcycle 16 Link "https://www.doi.org/"
	setcycle 17 Content "在運動團隊的相關研究中，教練採取嚴格的控制手段要求選手在訓練中付出努力，是十分常見的現象。過往亦有不少研究者從威權領導的理論觀點切入來探討此一現象，然而，儘管這些研究已累積了初步的研究成果，但多侷限於相似概念的質性訪談，沒有直接以實徵研究來釐清教練威權領導與選手努力行為的關係。因此，對於威權領導是否真的能促使選手付出更多努力，仍缺乏一明確的答案，形成了重要的研究缺口。為了彌補此一缺口，本研究依循雙向度威權領導的概念架構，將之區分為專權領導與尚嚴領導，並從領導權變觀點出發，提出了選手的目標導向作為邊界條件的理論模型。根據348筆大專甲組棒球員的資料顯示，尚嚴領導會提升選手的努力行為；但當選手擁有高逃避表現目標導向或高證明表現目標導向時，此一正向路徑的效果會弱化。另一方面，只有在選手擁有低證明表現目標導向時，專權領導才會對選手的努力行為具有負向預測效果。藉此，本研究釐清了教練的嚴格控制是否會促使選手更加努力，補足過往對此一重要現象缺乏實徵研究的缺口。"
	setcycle 17 NH ""
	setcycle 17 OSA Y
	setcycle 17 Text_id 6
	setcycle 17 BLOCK 3
	setcycle 17 O_id 6
	setcycle 17 Link "https://www.doi.org/"
	setcycle 18 Content "07_PLS.txt"
	setcycle 18 NH Y
	setcycle 18 OSA N
	setcycle 18 Text_id 7
	setcycle 18 BLOCK 3
	setcycle 18 O_id 7
	setcycle 18 Link "https://www.doi.org/"
	setcycle 19 Content "07_PLS.txt"
	setcycle 19 NH N
	setcycle 19 OSA N
	setcycle 19 Text_id 7
	setcycle 19 BLOCK 1
	setcycle 19 O_id 7
	setcycle 19 Link "https://www.doi.org/"
	setcycle 20 Content "Chen、Su及O'Seaghdha（2013）提出「現時延長假說」，實驗發現，中文的使用者相較於英文使用者，對「現在」的概念理解具有較高的延伸性；在劃分時間區塊時，中文使用者所標記的「現在」較英文使用者為長，且傾向將「過去」和「未來」的事件都表達為正在進行。本研究採用Cottle的「畫圓測驗」和「時間區段查點測驗」，進一步探討此一假說。從「畫圓測驗」的結果發現，當中文受試者畫三個圓圈來表達「過去」、「現在」和「未來」時，圓圈有66.7%的機會重疊，而「現在」通常在其描繪中扮演連結「過去」和「未來」的橋梁。「時間區段查點測驗」的結果顯示，定義「現在」的單位可以是秒、分，以及小時；相較之下，英文使用者的「現在」主要是以「秒」為單位。我們重新檢視「現時延長假說」，發現本研究支持其所提出的兩個概念：「現時延長」以及「時間融合」。雖然Chen等人認為這些差異主要是受到語言形態的影響，本研究認為即使在非語言的任務中，中文社群仍然有這些傾向，因此中文的因素也必須納入考量，方能得到最適當的解釋。"
	setcycle 20 NH ""
	setcycle 20 OSA Y
	setcycle 20 Text_id 7
	setcycle 20 BLOCK 2
	setcycle 20 O_id 7
	setcycle 20 Link "https://www.doi.org/"
	setcycle 21 Content "08_PLS.txt"
	setcycle 21 NH Y
	setcycle 21 OSA N
	setcycle 21 Text_id 8
	setcycle 21 BLOCK 3
	setcycle 21 O_id 8
	setcycle 21 Link "https://www.doi.org/"
	setcycle 22 Content "08_PLS.txt"
	setcycle 22 NH N
	setcycle 22 OSA N
	setcycle 22 Text_id 8
	setcycle 22 BLOCK 2
	setcycle 22 O_id 8
	setcycle 22 Link "https://www.doi.org/"
	setcycle 23 Content "強暴迷思的概念與測量具有在地性、變遷性，並與社會文化特色密切相關，因此不能僅移植西方的概念或使用西方的量表。本研究從傳統華人社會文化角度出發，提出華人的強暴迷思概念，並據以建立測量工具。華人重視家庭、關係、修身、德性、他人評價，故作者從這些面向思考並整合過去的研究經驗，提出華人家庭取向、貞潔取向、他人取向、與自省取向的強暴迷思特徵。本研究以無記名自陳式問卷調查法蒐集資料，研究對象包括5所公立、7所私立大學的學生，經剔除廢卷後得有效問卷969份。結果發現，上述華人強暴迷思的特徵中，家庭取向迷思可分為被害延伸與加害延伸兩項迷思，貞潔與他人取向迷思可合併為一個構念，而得到四項構念或分量表：被害延伸迷思、加害延伸迷思、貞潔與他人迷思、自省迷思。整體量表具備良好的內部一致性信度與組合信度，並具備構念效度、複合效度、與效標關聯效度。文末討論研究結果的理論意涵、實務應用、研究限制、與未來研究方向。"
	setcycle 23 NH ""
	setcycle 23 OSA Y
	setcycle 23 Text_id 8
	setcycle 23 BLOCK 1
	setcycle 23 O_id 8
	setcycle 23 Link "https://www.doi.org/"
	setcycle 24 Content "09_PLS.txt"
	setcycle 24 NH Y
	setcycle 24 OSA N
	setcycle 24 Text_id 9
	setcycle 24 BLOCK 1
	setcycle 24 O_id 9
	setcycle 24 Link "https://www.doi.org/"
	setcycle 25 Content "09_PLS.txt"
	setcycle 25 NH N
	setcycle 25 OSA N
	setcycle 25 Text_id 9
	setcycle 25 BLOCK 3
	setcycle 25 O_id 9
	setcycle 25 Link "https://www.doi.org/"
	setcycle 26 Content "本研究以台灣社群媒體上的分手文章為分析對象，比較兩種使用於文本分析的詞彙分析方式用於區辨作者性別時的優劣。使用封閉式詞彙分析時，本研究根據過去研究，以中文版LIWC詞典中的人稱代名詞與非代名詞類為預測變項，分別建立邏輯迴歸模型預測作者性別。結果顯示，人稱代名詞有較佳的預測力；唯其無法反映分手的特性。使用開放式詞彙分析時，本研究以寫作風格分析的演算法，直接從分手文章中找出最能代表不同性別的關鍵詞。結果發現即使只選取前1%的關鍵詞建立模型，模型的表現也優於以封閉式詞彙分析建立之模型。接著，針對各性別關鍵詞所對應的中文LIWC詞類，分別進行網路分析。根據網路節點的中間度指標，本研究發現動詞、副詞、關係詞、社交歷程詞、生理歷程詞和認知歷程詞為兩性分手文章中共有的LIWC心理語文特徵；但唯獨女性才有情感歷程詞、性詞和否定詞。由此推知，台灣社群媒體使用者中，女性比男性在文章中更有情感方面的表現。"
	setcycle 26 NH ""
	setcycle 26 OSA Y
	setcycle 26 Text_id 9
	setcycle 26 BLOCK 2
	setcycle 26 O_id 9
	setcycle 26 Link "https://www.doi.org/"
	setcycle 27 Content "10_PLS.txt"
	setcycle 27 NH Y
	setcycle 27 OSA N
	setcycle 27 Text_id 10
	setcycle 27 BLOCK 1
	setcycle 27 O_id 10
	setcycle 27 Link "https://www.doi.org/"
	setcycle 28 Content "10_PLS.txt"
	setcycle 28 NH N
	setcycle 28 OSA N
	setcycle 28 Text_id 10
	setcycle 28 BLOCK 2
	setcycle 28 O_id 10
	setcycle 28 Link "https://www.doi.org/"
	setcycle 29 Content "Baumeister認為自我調控是有限資源，但當個體處於自我耗竭狀態時，個體本身信念及作業重要性會有調節效果，使得個體有著較佳的表現。Tesser則強調所有的自我功能相互影響，共同運作於自我系統來維持正向自我評價。本研究則希望結合兩者，提出所有自控行為運作在同一自我系統下共影響來維持正向自我評價的想法。我們預期當個體正向自我評價受威脅，此時即便自我調控控制資源已被消耗，個體還是會有動機去調控資源，以自我設限的方式來維護自我評價，但卻不會更進一步去擴大自我評價。本研究首先透過二個預試找到合適的自我資源耗竭作業及自我設限作業，正式研究則為2（自我設限傾向：低 vs. 高）× 2（自我資源耗竭程度：低 vs. 高）× 2（叫色作業性質：妨礙相關 vs. 妨礙無關）的三因子參與者間實驗設計，以叫色作業正確完成題數為依變項。結果符合研究假設，當受到威脅、自我設限傾向高時，若告知叫色作業會妨礙表現，此時即便自我耗竭程度高，參與者仍會顯著完成比告知叫色作業與表現無關組更多的題數。而當參與者自我設限傾向低時，告知叫色作業會妨礙表現，則不管參與者是否仍有資源，他們的表現並無顯著差異。這些結果顯示自我調控作業作用於同一自我系統，在自我資源耗竭程度高時，個體還是會願意去調度資源盡力從事自我設限的自控作業來維持正向自我評價，但卻不會去擴大化自我評價。"
	setcycle 29 NH ""
	setcycle 29 OSA Y
	setcycle 29 Text_id 10
	setcycle 29 BLOCK 3
	setcycle 29 O_id 10
	setcycle 29 Link "https://www.doi.org/"
	setcycle 30 Content "11_PLS.txt"
	setcycle 30 NH Y
	setcycle 30 OSA N
	setcycle 30 Text_id 11
	setcycle 30 BLOCK 2
	setcycle 30 O_id 11
	setcycle 30 Link "https://www.doi.org/"
	setcycle 31 Content "11_PLS.txt"
	setcycle 31 NH N
	setcycle 31 OSA N
	setcycle 31 Text_id 11
	setcycle 31 BLOCK 3
	setcycle 31 O_id 11
	setcycle 31 Link "https://www.doi.org/"
	setcycle 32 Content "人工代理者雖然是機器，但和人類一樣常會做出具有偏誤的決策。本文討論人工代理者中常用的機器學習系統何時會學習去做偏誤決策，以及如何使用認知心理學與認知神經科學中發展出來的方法來瞭解其具有偏誤的決策歷程。具體而言，我們會闡述本質上是歸納推理的監督式機器學習如何導致如忽略少數團體等不透明的決策偏誤。接著，我們會視一個人工代理者如一位人類研究參與者，回顧文獻中如何透過腦部切除與影像遮蔽等認知科學中的神經與行為方法來揭露一個人工代理者的決策準則與傾向。在文末，我們會討論有偏誤的人工代理者對於社會的影響，並鼓勵認知科學家們一同來揭示並改正機器的各種偏誤。"
	setcycle 32 NH ""
	setcycle 32 OSA Y
	setcycle 32 Text_id 11
	setcycle 32 BLOCK 1
	setcycle 32 O_id 11
	setcycle 32 Link "https://www.doi.org/"
	setcycle 33 Content "12_PLS.txt"
	setcycle 33 NH Y
	setcycle 33 OSA N
	setcycle 33 Text_id 12
	setcycle 33 BLOCK 2
	setcycle 33 O_id 12
	setcycle 33 Link "https://www.doi.org/"
	setcycle 34 Content "12_PLS.txt"
	setcycle 34 NH N
	setcycle 34 OSA N
	setcycle 34 Text_id 12
	setcycle 34 BLOCK 1
	setcycle 34 O_id 12
	setcycle 34 Link "https://www.doi.org/"
	setcycle 35 Content "本研究從夫妻對偶互動觀點，探討夫妻間的幽默運用動機與運用型態，分析其對夫妻婚姻品質的影響。資料來源為大台北地區390對已婚夫妻，測量內容包括幽默動機、幽默型態、婚姻品質及其他人口控制變項，採取因素分析、潛在類型分析及階層線性模型等方法進行分析。主要結果顯示：（一）幽默運用之動機可分為利他動機、利關係動機及利己動機三因素；幽默型態則分為自我貶抑（以自己為玩笑題材）、挖苦嘲諷（以別人為玩笑題材）及詼諧戲謔（以文字為玩笑題材）三因素。利他與利關係的幽默動機、詼諧戲謔的幽默型態以及婚姻品質等方面，丈夫的分數均顯著高於妻子。（二）夫妻間幽默型態的運用類型可分為「夫詼諧自貶型」、「雙多元運用型」、「雙少用幽默型」及「妻嘲諷自貶型」，分別各占25%、25%、14%及35%。（三）利關係動機愈高的夫妻有愈高的充實感；而比起「妻嘲諷自貶型」夫妻，幽默運用類型為「夫詼諧自貶型」或「雙少用幽默型」的夫妻有較高的婚姻品質；此外，夫妻充實感因性別與幽默運用類型的交互作用，或幽默動機與運用類型的交互作用而不同。這些結果凸顯幽默在華人夫妻間的獨特意義與作用。"
	setcycle 35 NH ""
	setcycle 35 OSA Y
	setcycle 35 Text_id 12
	setcycle 35 BLOCK 3
	setcycle 35 O_id 12
	setcycle 35 Link "https://www.doi.org/"
	sortby BLOCK
	slice 0 12
	shuffle Text_id
	run text_seq

define sketchpad text_display
	set duration 1000
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=yes font_family="chinese-japanese-korean" font_italic=no font_size=36 html=yes show_if=always text="[Content]" x=0 y=-96 z_index=0

define keyboard_response text_end
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses SPACE

define form_text_display text_read
	set timeout infinite
	set spacing 10
	set rows "1;4;1"
	set only_render no
	set ok_text "閱讀完畢，點此進行適讀性評估"
	set margins "50;50;50;50"
	set form_title "請閱讀這份文章"
	set form_text "[Content]"
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme gray
	widget 0 0 3 1 label text="[form_title]"
	widget 0 1 3 1 label center=no text="[form_text]"
	widget 1 2 1 1 button text="[ok_text]"


define sequence text_seq
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run text_read always
	run text_display never
	run text_end never
	run id_recording always
	run Comprehensibility_survey always
	run Scientificness_survey always
	run Credibility_survey always
	run Veracity_survey always
	run Decision_survey always
	run Access_survey always
	run Access_show "[response]=\"想\""
	run Questions never
	run EES never
	run ACC never
	run block "([count_text_seq]%3)=2"

define form_text_display welcome
	set timeout infinite
	set spacing 10
	set rows "1;4;1"
	set only_render no
	set ok_text Ok
	set margins "50;50;50;50"
	set form_title "科學文獻閱讀模式測試"
	__form_text__
	參與者您好！<br>
	在接下來的時間裡，您將會看一系列的文章，並回答一些簡單的問題，在填答過程中，如果您有關本研究的任何疑問或不理解的地方，請隨時提出。<br>
	<br>
	完成全部的問卷約會耗時您30分鐘左右的時間。<br>
	__end__
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme gray
	widget 0 0 3 1 label text="[form_title]"
	widget 0 1 3 1 label center=no text="[form_text]"
	widget 1 2 1 1 button text="[ok_text]"


